PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = condition1
  exportHTML = manually
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is an experiment about learning words of a foreign language. You will hear the pronunciation of each word a few times, accompanied by a picture of the word. Throughout this experiment, you will answer different types of questions, such as picture matching questions. There will be two training sessions where you familiarize yourself with the language, three test sessions where you hear words you have learned and novel words, and one post test session. The experiment will take between 35 and 60 minutes, with optional breaks at different points. Participation is completely voluntary, and you can quit the experiment at any point using the esc key.

        Press any key to advance.
    KeyboardComponent advanceTrain1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    TextComponent train2warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent train2warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent train2warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
    KeyboardComponent skipTrain2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine train2
    ImageComponent imagetrain2
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine trainquestions2
    SoundComponent stimulitest2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.5
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    ImageComponent correct2
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    ImageComponent incorrect2
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    KeyboardComponent train2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
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    TextComponent chooseImageTrain2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Choose the correct image (F or J) corresponding to the word you just heard.
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    TextComponent train2F
      letterHeight = 0.2
      pos = (-0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = F
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    TextComponent train2J
      letterHeight = 0.2
      pos = (0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = J
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  Routine test1
    SoundComponent test1Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.5
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    ImageComponent test1Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 18.5
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    SoundComponent test1Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2.5
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    ImageComponent test1Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    ImageComponent test1Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    KeyboardComponent test1Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    ImageComponent test1Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent test1F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = F
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    TextComponent test1J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = J
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    TextComponent test1Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine test2
    SoundComponent test2Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.5
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    ImageComponent test2Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 18.5
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    SoundComponent test2Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2.5
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    ImageComponent test2Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    ImageComponent test2Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio2Mute2
      image = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    KeyboardComponent test2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    ImageComponent test2Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent test2F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = F
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    TextComponent test2J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = J
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    TextComponent test2Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine test3
    SoundComponent test3Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.5
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    ImageComponent test3Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 18.5
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    SoundComponent test3Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2.5
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    ImageComponent test3Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    ImageComponent test3Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    KeyboardComponent test3Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    ImageComponent test3Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent test3F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = F
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    TextComponent test3J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = J
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    TextComponent test3Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine postTestInstr
    KeyboardComponent skipPostTestInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent postTestInstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear three pronunciations of a word. Your task is to determine which pronunciation is identical to the second pronunciation, the first one (press F) or the third one (press J). You have six seconds to answer each question; if you do not answer, the experiment will proceed automatically. This test will not involve feedback.

        Press any key to advance.
  Routine posttest
    KeyboardComponent postTestResponse
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 6.5
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    SoundComponent postTestAudio1
      sound [set every repeat] = $audioA
      startVal [time (s)] = 0.5
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    ImageComponent fSound
      image = sound.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent fMute
      image = mute.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 9.5
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    SoundComponent postTestAudio2
      sound [set every repeat] = $audioX
      startVal [time (s)] = 2
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    ImageComponent xMute1
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    ImageComponent xSound
      image = sound.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent xMute2
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 8
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    SoundComponent postTestAudio3
      hamming = False
      sound [set every repeat] = $audioB
      startVal [time (s)] = 3.5
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    ImageComponent jMute1
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent jSound
      image = sound.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
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    ImageComponent jMute2
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 6.5
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    TextComponent textInstrPostTest
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Does the middle audio (X) match in pronunciation with F or J? (Press F or J)
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    TextComponent fText
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = F
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    TextComponent xText
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = X
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    TextComponent jText
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = J
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  Routine thankuser
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating!

        Press any key to end this experiment
    KeyboardComponent quit
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train2QuestInstr
    TextComponent train2QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Choose the correct image corresponding to the word you just heard.

        Press any key to advance
    KeyboardComponent train2QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1p2
    ImageComponent imagetrain1p2
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain1p2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine train1p2QuestInstr
    TextComponent train1p2QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will now be presented with three questions. For each, you will hear one word and you will choose the image that corresponds to it by clicking the keys F or J.

        Press any key to advance
    KeyboardComponent train1p2QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1p2questions
    SoundComponent stimulitest1_2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0
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  Routine train1Instr
    TextComponent train1Type
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $"You will be hearing " + numWords + " words in a row, each five times. Please try to remember these words’ pronunciations and their corresponding meaning shown in the pictures. \nPress any key to advance."
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    KeyboardComponent skipTrain1Type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1questions
    SoundComponent stimulitest1
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.5
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    ImageComponent correct
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    ImageComponent incorrect
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    KeyboardComponent train1Response
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
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    TextComponent chooseImageTrain1
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Choose the correct image (F or J) corresponding to the word you just heard.
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    TextComponent train1F
      letterHeight = 0.2
      pos = (-0.5, 0.05)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = F
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    TextComponent train1J
      letterHeight = 0.2
      pos = (0.5, 0.05)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = J
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  Routine train2Instr
    TextComponent train2Type
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $"You will be hearing " + numWords + " words in a row, each for five times. Please try to remember these words’ pronunciations and their corresponding meaning shown in the pictures. \nPress any key to advance."
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    KeyboardComponent skipTrain2Type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1
    ImageComponent imagetrain1p1
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain1p1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine train1QuestInstr
    TextComponent train1QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Choose the image corresponding to the word you just heard by pressing F or J. The correct answer will be indicated by a circle after your response. You have ten seconds to answer each question; if you do not answer, the experiment will proceed automatically. This section will involve feedback.

        Press any key to advance
    KeyboardComponent train1QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if trial1phases.thisN > 0:
            continueRoutine = False
            break_loop.finished
  Routine test1instr
    TextComponent test1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear two different pronunciations of words you have already heard. Of the two options, try to identify the pronunciation that matches the pronunciation you previously heard. You have twenty seconds to answer each question; if you do not answer, the experiment will proceed automatically. This section will involve feedback.

        Press any key to start now.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine test1wait
    KeyboardComponent skipTest1Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test1warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test1warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test1warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
  Routine test2instr
    TextComponent test2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear two different pronunciations of words you have not heard. Of the two options, try to guess which pronunciation is the correct one in the language you are learning. You have twenty seconds to answer each question; if you do not answer, the experiment will proceed automatically. This test will not involve feedback.

        Press any key to start now
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine test2wait
    KeyboardComponent skipTest2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test2warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test2warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test2warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
  Routine test3instr
    TextComponent test3Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear two different pronunciations of words you have not heard. Of the two options, try to guess which pronunciation is the correct one in the language you are learning. You have twenty seconds to answer each question; if you do not answer, the experiment will proceed automatically. This test will not involve feedback.

        Press any key to start now
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine test3wait
    KeyboardComponent skipTest3Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test3warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test3warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test3warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
  Routine train1feedback
    ImageComponent correctFeed
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent incorrectFeed
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent fFeedback
      letterHeight = 0.2
      pos = (-0.5, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = F
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    TextComponent jFeedback
      letterHeight = 0.2
      pos = (0.5, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = J
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    ImageComponent circle
      image [set every repeat] = circle.png
      pos [set every repeat] = $(truePos, -0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent xTrain
      image [set every repeat] = wrong.png
      pos [set every repeat] = $(falsePos,-0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent train1Instructions
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Choose the correct image (F or J) corresponding to the word you just heard.
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  Routine test1feedback
    SoundComponent test1Correct
      sound [set every repeat] = $feedback
      startVal [time (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = The correct pronunciation is...
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    ImageComponent image
      image [set every repeat] = sound.png
      pos = (0, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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Flow
  Routine instr
  LoopInitiator alltrain1 loopType="TrialHandler"
    conditionsFile = aoiConditions\train1Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condFile', 'train1P1LoopCondition.xlsx'), ('numWords', 2)]),
      OrderedDict([('condFile', 'train1P2LoopCondition.xlsx'), ('numWords', 4)])]
    Routine train1Instr
    LoopInitiator trial1phases loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = sequential
      nReps = 1
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      LoopInitiator train1Words loopType="TrialHandler"
        conditionsFile = $condFiles
        loopType = sequential
        nReps = 1
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        Routine train1
      LoopTerminator train1Words
      LoopInitiator break_loop loopType="TrialHandler"
        loopType = sequential
        nReps = 1
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        Routine train1QuestInstr
      LoopTerminator break_loop
      LoopInitiator train1Questions loopType="TrialHandler"
        conditionsFile = $testFiles
        loopType = sequential
        nReps = 1
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        Routine train1questions
        Routine train1feedback
      LoopTerminator train1Questions
    LoopTerminator trial1phases
  LoopTerminator alltrain1
  Routine test1wait
  Routine test1instr
  LoopInitiator test1Loop loopType="TrialHandler"
    conditionsFile = aoiConditions\test1Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'trainingaudio/14_pokoto1.wav'), ('secondAudio', 'trainingaudio/14_pokoto3.wav'), ('imageLoc', 'pngimages/14_coffee.png'), ('whichAudio', 1), ('currentPhase', 'test1')]),
      OrderedDict([('firstAudio', 'trainingaudio/10_tokiti1.wav'), ('secondAudio', 'trainingaudio/10_tokiti3.wav'), ('imageLoc', 'pngimages/10_backpack.png'), ('whichAudio', 1), ('currentPhase', 'test1')]),
      OrderedDict([('firstAudio', 'trainingaudio/03_kikita1.wav'), ('secondAudio', 'trainingaudio/03_kikita3.wav'), ('imageLoc', 'pngimages/03_box.png'), ('whichAudio', 2), ('currentPhase', 'test1')]),
      OrderedDict([('firstAudio', 'trainingaudio/07_pitapi2.wav'), ('secondAudio', 'trainingaudio/07_pitapi3.wav'), ('imageLoc', 'pngimages/07_suitcase.png'), ('whichAudio', 1), ('currentPhase', 'test1')]),
      OrderedDict([('firstAudio', 'trainingaudio/25_tapapi2.wav'), ('secondAudio', 'trainingaudio/25_tapapi1.wav'), ('imageLoc', 'pngimages/25_apple.png'), ('whichAudio', 2), ('currentPhase', 'test1')]),
      OrderedDict([('firstAudio', 'trainingaudio/04_kitoti1.wav'), ('secondAudio', 'trainingaudio/04_kitoti2.wav'), ('imageLoc', 'pngimages/04_ladder.png'), ('whichAudio', 2), ('currentPhase', 'test1')]),
      OrderedDict([('firstAudio', 'trainingaudio/15_kopota1.wav'), ('secondAudio', 'trainingaudio/15_kopota3.wav'), ('imageLoc', 'pngimages/15_barrel.png'), ('whichAudio', 2), ('currentPhase', 'test1')])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
    Routine test1
    Routine test1feedback
  LoopTerminator test1Loop
  Routine test2wait
  Routine test2instr
  LoopInitiator test2Loop loopType="TrialHandler"
    conditionsFile = aoiConditions\test2Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'novelaudio/64_popiti2.wav'), ('secondAudio', 'novelaudio/64_popiti1.wav'), ('imageLoc', 'pngimages/64_shovel.png'), ('whichAudio', 2), ('currentPhase', 'test2')]),
      OrderedDict([('firstAudio', 'novelaudio/69_kotota3.wav'), ('secondAudio', 'novelaudio/69_kotota2.wav'), ('imageLoc', 'pngimages/69_tooth.png'), ('whichAudio', 1), ('currentPhase', 'test2')]),
      OrderedDict([('firstAudio', 'novelaudio/78_kakoka3.wav'), ('secondAudio', 'novelaudio/78_kakoka1.wav'), ('imageLoc', 'pngimages/78_cow.png'), ('whichAudio', 2), ('currentPhase', 'test2')]),
      OrderedDict([('firstAudio', 'novelaudio/49_tatopi3.wav'), ('secondAudio', 'novelaudio/49_tatopi1.wav'), ('imageLoc', 'pngimages/49_calculator.png'), ('whichAudio', 2), ('currentPhase', 'test2')]),
      OrderedDict([('firstAudio', 'novelaudio/61_pikati2.wav'), ('secondAudio', 'novelaudio/61_pikati3.wav'), ('imageLoc', 'pngimages/61_key.png'), ('whichAudio', 1), ('currentPhase', 'test2')]),
      OrderedDict([('firstAudio', 'novelaudio/53_patapo1.wav'), ('secondAudio', 'novelaudio/53_patapo2.wav'), ('imageLoc', 'pngimages/53_hammer.png'), ('whichAudio', 1), ('currentPhase', 'test2')]),
      OrderedDict([('firstAudio', 'novelaudio/52_pakaki1.wav'), ('secondAudio', 'novelaudio/52_pakaki2.wav'), ('imageLoc', 'pngimages/52_newspaper.png'), ('whichAudio', 1), ('currentPhase', 'test2')])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
    Routine test2
  LoopTerminator test2Loop
  Routine test3wait
  Routine test3instr
  LoopInitiator test3Loop loopType="TrialHandler"
    conditionsFile = aoiConditions\test3Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'novelaudio/64_popiti2.wav'), ('secondAudio', 'novelaudio/64_popiti1.wav'), ('imageLoc', 'pngimages/69_tooth.png'), ('whichAudio', 2), ('currentPhase', 'test3')]),
      OrderedDict([('firstAudio', 'novelaudio/69_kotota3.wav'), ('secondAudio', 'novelaudio/69_kotota2.wav'), ('imageLoc', 'pngimages/45_scissors.png'), ('whichAudio', 1), ('currentPhase', 'test3')]),
      OrderedDict([('firstAudio', 'novelaudio/78_kakoka3.wav'), ('secondAudio', 'novelaudio/78_kakoka1.wav'), ('imageLoc', 'pngimages/48_brush.png'), ('whichAudio', 2), ('currentPhase', 'test3')]),
      OrderedDict([('firstAudio', 'novelaudio/49_tatopi3.wav'), ('secondAudio', 'novelaudio/49_tatopi1.wav'), ('imageLoc', 'pngimages/36_microwave.png'), ('whichAudio', 2), ('currentPhase', 'test3')]),
      OrderedDict([('firstAudio', 'novelaudio/61_pikati2.wav'), ('secondAudio', 'novelaudio/61_pikati3.wav'), ('imageLoc', 'pngimages/41_piano.png'), ('whichAudio', 2), ('currentPhase', 'test3')]),
      OrderedDict([('firstAudio', 'novelaudio/53_patapo1.wav'), ('secondAudio', 'novelaudio/53_patapo2.wav'), ('imageLoc', 'pngimages/78_cow.png'), ('whichAudio', 2), ('currentPhase', 'test3')]),
      OrderedDict([('firstAudio', 'novelaudio/52_pakaki1.wav'), ('secondAudio', 'novelaudio/52_pakaki2.wav'), ('imageLoc', 'pngimages/79_pig.png'), ('whichAudio', 2), ('currentPhase', 'test3')])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
    Routine test3
  LoopTerminator test3Loop
  Routine postTestInstr
  LoopInitiator postTestLoop loopType="TrialHandler"
    conditionsFile = postTestConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audioA', 'postTest/82_tipiko1.wav'), ('audioX', 'postTest/82_tipiko1.wav'), ('audioB', 'postTest/82_tipiko3.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', 'postTest/83_pitita3.wav'), ('audioX', 'postTest/83_pitita3.wav'), ('audioB', 'postTest/83_pitita2.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', 'postTest/84_pitoka3.wav'), ('audioX', 'postTest/84_pitoka1.wav'), ('audioB', 'postTest/84_pitoka1.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', 'postTest/85_kipata2.wav'), ('audioX', 'postTest/85_kipata2.wav'), ('audioB', 'postTest/85_kipata3.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', 'postTest/86_totipa2.wav'), ('audioX', 'postTest/86_totipa1.wav'), ('audioB', 'postTest/86_totipa1.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', 'postTest/87_kopoko1.wav'), ('audioX', 'postTest/87_kopoko3.wav'), ('audioB', 'postTest/87_kopoko3.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', 'postTest/88_pokota2.wav'), ('audioX', 'postTest/88_pokota2.wav'), ('audioB', 'postTest/88_pokota1.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')])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
    Routine posttest
  LoopTerminator postTestLoop
  Routine thankuser
