PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['ID Number'], expInfo['date'])
  Experiment info = {'participant': '', 'ID Number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = experiment
  exportHTML = manually
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is an experiment about learning the stress rules in a foreign language. Stress within words is often described as which syllable has emphasis placed on it, and many languages follow certain rules regarding where stress is placed. During this experiment you will hear the pronunciation of each word a few times. There will be training sessions where you will familiarize yourself with the pronunciation of the language, sessions where you will judge the pronunciation of words you have heard before, sessions where you will judge the pronunciation of words you have not heard before, and one post-test session. The experiment will take between 35 and 60 minutes, with optional breaks at different points. Participation is completely voluntary, and you can quit the experiment at any point using the esc key.

        Press any key to advance.
    KeyboardComponent advanceTrain1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent expVersion
      Code Type = Auto->JS
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      Begin Experiment:
        if len(expInfo['ID Number']) > 0:
            if expInfo['ID Number'][0] == "1":
                trainFile = "aoiConditions/train1Conditions.xlsx"
                test1File = "aoiConditions/test1Conditions.xlsx"
                test2File = "aoiConditions/test2Conditions.xlsx"
                test3File = "aoiConditions/test3Conditions.xlsx"
            elif expInfo['ID Number'][0] == "2":
                trainFile = "ioaConditions/train1Conditions.xlsx"
                test1File = "ioaConditions/test1Conditions.xlsx"
                test2File = "ioaConditions/test2Conditions.xlsx"
                test3File = "ioaConditions/test3Conditions.xlsx"
            elif expInfo['ID Number'][0] == "3":
                trainFile = "oiaConditions/train1Conditions.xlsx"
                test1File = "oiaConditions/test1Conditions.xlsx"
                test2File = "oiaConditions/test2Conditions.xlsx"
                test3File = "oiaConditions/test3Conditions.xlsx"
            else:
                trainFile = "aoiConditions/train1Conditions.xlsx"
                test1File = "aoiConditions/test1Conditions.xlsx"
                test2File = "aoiConditions/test2Conditions.xlsx"
                test3File = "aoiConditions/test3Conditions.xlsx"
        else:
            trainFile = "aoiConditions/train1Conditions.xlsx"
            test1File = "aoiConditions/test1Conditions.xlsx"
            test2File = "aoiConditions/test2Conditions.xlsx"
            test3File = "aoiConditions/test3Conditions.xlsx"
  Routine instr2
    TextComponent train2warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent train2warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent train2warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
    KeyboardComponent skipTrain2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine train2
    ImageComponent imagetrain2
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train2
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine trainquestions2
    SoundComponent stimulitest2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.5
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    ImageComponent correct2
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    ImageComponent incorrect2
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    KeyboardComponent train2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
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    TextComponent chooseImageTrain2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Choose the correct image (F or J) corresponding to the word you just heard.
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    TextComponent train2F
      letterHeight = 0.2
      pos = (-0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = F
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    TextComponent train2J
      letterHeight = 0.2
      pos = (0.5, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = J
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  Routine test1
    SoundComponent test1Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 1
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    ImageComponent test1Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 18
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    SoundComponent test1Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 3
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    ImageComponent test1Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    ImageComponent test1Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 16
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    KeyboardComponent test1Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 4
      stopVal [duration (s)] = 16
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    ImageComponent test1Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent test1F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 16
      text = F
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    TextComponent test1J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 16
      text = J
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    TextComponent test1Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine test2
    SoundComponent test2Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.5
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    ImageComponent test2Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 18.5
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    SoundComponent test2Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2.5
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    ImageComponent test2Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    ImageComponent test2Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio2Mute2
      image = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    KeyboardComponent test2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    ImageComponent test2Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent test2F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = F
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    TextComponent test2J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = J
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    TextComponent test2Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine test3
    SoundComponent test3Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.5
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    ImageComponent test3Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 18.5
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    SoundComponent test3Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 2.5
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    ImageComponent test3Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    ImageComponent test3Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    KeyboardComponent test3Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
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    ImageComponent test3Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent test3F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = F
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    TextComponent test3J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 16.5
      text = J
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    TextComponent test3Instr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Choose the audio that has the correct pronunciation (F or J)
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  Routine postTestInstr
    KeyboardComponent skipPostTestInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent postTestInstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear three pronunciations of a word. Your task is to determine which pronunciation is identical to the second pronunciation, the first one (press F) or the third one (press J). You have six seconds to answer each question; if you do not answer, the experiment will proceed automatically. This test will not involve feedback.

        Press any key to advance.
  Routine posttest
    KeyboardComponent postTestResponse
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 6.5
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    SoundComponent postTestAudio1
      sound [set every repeat] = $audioA
      startVal [time (s)] = 0.5
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    ImageComponent fSound
      image = sound.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    ImageComponent fMute
      image = mute.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 9.5
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    SoundComponent postTestAudio2
      sound [set every repeat] = $audioX
      startVal [time (s)] = 2
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    ImageComponent xMute1
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    ImageComponent xSound
      image = sound.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent xMute2
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 8
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    SoundComponent postTestAudio3
      hamming = False
      sound [set every repeat] = $audioB
      startVal [time (s)] = 3.5
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    ImageComponent jMute1
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent jSound
      image = sound.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
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    ImageComponent jMute2
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 6.5
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    TextComponent textInstrPostTest
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Does the middle audio (X) match in pronunciation with F or J? (Press F or J)
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    TextComponent fText
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = F
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    TextComponent xText
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = X
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    TextComponent jText
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = J
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  Routine thankuser
    TextComponent byeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating!

        Press any key to end this experiment
    KeyboardComponent quit
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train2QuestInstr
    TextComponent train2QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Choose the correct image corresponding to the word you just heard.

        Press any key to advance
    KeyboardComponent train2QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1p2
    ImageComponent imagetrain1p2
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train1p2
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain1p2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine train1p2QuestInstr
    TextComponent train1p2QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You will now be presented with three questions. For each, you will hear one word and you will choose the image that corresponds to it by clicking the keys F or J.

        Press any key to advance
    KeyboardComponent train1p2QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1p2questions
    SoundComponent stimulitest1_2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0
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  Routine train1Instr
    TextComponent train1Type
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $"You will be hearing " + numWords + " words in a row, each five times. Please try to remember these words’ pronunciations and their corresponding meaning shown in the pictures. \nPress any key to advance."
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    KeyboardComponent skipTrain1Type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        myCount = 0
  Routine train1questions
    SoundComponent stimulitest1
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.5
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    ImageComponent correct
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    ImageComponent incorrect
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 9.5
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    KeyboardComponent train1Response
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
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    TextComponent chooseImageTrain1
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Choose the correct image (F or J) corresponding to the word you just heard.
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    TextComponent train1F
      letterHeight = 0.2
      pos = (-0.5, 0.05)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = F
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    TextComponent train1J
      letterHeight = 0.2
      pos = (0.5, 0.05)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 8.5
      text = J
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  Routine train2Instr
    TextComponent train2Type
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $"You will be hearing " + numWords + " words in a row, each for five times. Please try to remember these words’ pronunciations and their corresponding meaning shown in the pictures. \nPress any key to advance."
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    KeyboardComponent skipTrain2Type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine train1
    ImageComponent imagetrain1p1
      image [set every repeat] = $imageLoc
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 9
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    SoundComponent stimuli1train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
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    SoundComponent stimuli2train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 4
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    SoundComponent stimuli3train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 6
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    SoundComponent stimuli4train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 8
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    SoundComponent stimuli5train1p1
      sound [set every repeat] = $audio
      startVal [time (s)] = 10
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    TextComponent listenTrain1p1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
      text = Listen to the words:
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  Routine train1QuestInstr
    TextComponent train1QuestText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Choose the image corresponding to the word you just heard by pressing F or J. The correct answer will be indicated by a circle after your response. You have ten seconds to answer each question; if you do not answer, the experiment will proceed automatically. This train session will involve feedback.

        Press any key to advance
    KeyboardComponent train1QuestAdvance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if myCount> 0:
            continueRoutine = False
            break_loop.finished
      End Routine:
        myCount = myCount + 1
  Routine test1instr
    TextComponent test1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear two different pronunciations of words you have already heard. Of the two options, try to identify the pronunciation that matches the pronunciation you previously heard. You have twenty seconds to answer each question; if you do not answer, the experiment will proceed automatically. This train session will involve feedback.

        Press any key to start now.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine test1wait
    KeyboardComponent skipTest1Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test1warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test1warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test1warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
  Routine test2instr
    TextComponent test2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear two different pronunciations of words you have not heard. Of the two options, try to guess which pronunciation follows the stress patterns in the language you are learning, that is, places the emphasis on the correct syllable. You have twenty seconds to answer each question; if you do not answer, the experiment will proceed automatically. There will be an optional 3-minute break in the middle. This test will not involve feedback.

        Press any key to start now
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine test2wait
    KeyboardComponent skipTest2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test2warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 3 minutes.

        Press any button to start now
    TextComponent test2warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 2 minutes.

        Press any button to start now
    TextComponent test2warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
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      text:
        Next part will start automatically
        in less than 1 minute.

        Press any button to start now
  Routine test3instr
    TextComponent test3Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        You will now hear two different pronunciations of words you have not heard. Of the two options, try to guess which pronunciation is the correct one in the language you are learning. You have twenty seconds to answer each question; if you do not answer, the experiment will proceed automatically. This test will not involve feedback.

        Press any key to start now
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine test3wait
    KeyboardComponent skipTest3Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    TextComponent test3warning3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text = Break. Press any key to resume when you are ready. The experiment will automatically resume in three minutes.
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    TextComponent test3warning2
      letterHeight = 0.05
      startVal [time (s)] = 60
      stopVal [duration (s)] = 60
      text = Break. Press any key to resume when you are ready. The experiment will automatically resume in two minutes.
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    TextComponent test3warning1
      letterHeight = 0.05
      startVal [time (s)] = 120
      stopVal [duration (s)] = 60
      text = Break. Press any key to resume when you are ready. The experiment will automatically resume in one minutes.
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  Routine train1feedback
    ImageComponent correctFeed
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent incorrectFeed
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,-0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent fFeedback
      letterHeight = 0.2
      pos = (-0.5, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = F
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    TextComponent jFeedback
      letterHeight = 0.2
      pos = (0.5, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = J
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    ImageComponent circle
      image [set every repeat] = circle.png
      pos [set every repeat] = $(truePos, -0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent xTrain
      image [set every repeat] = wrong.png
      pos [set every repeat] = $(falsePos,-0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent train1Instructions
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Choose the correct image (F or J) corresponding to the word you just heard.
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  Routine test1feedback
    SoundComponent test1Correct
      sound [set every repeat] = $feedback
      startVal [time (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = The correct pronunciation is...
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    ImageComponent image
      image [set every repeat] = sound.png
      pos = (0, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine ageSurvey
    CodeComponent setup_age
      Code Type = Auto->JS
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      Begin Routine:
        kb = keyboard.Keyboard()
        textStarted=0
        rt=0
        modify = False
        age.text = ''
        displayText=''
        oldDisplayText=''
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        typedWords=[]
        thisWord=0
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable=='|':
                cursorVariable=' '
            else:
                cursorVariable='|'
            cursorCounter=0
        cursorCounter+=1

        keys = event.getKeys()
        if len(keys):
        #Start the clock on first key
            if textStarted == 0:
                textStarted = 1
            if 'return' in keys:
                continueRoutine = False
            if 'space' in keys:
                displayText+=' '
            elif 'period' in keys:
                displayText+='.'
            elif 'comma' in keys:
                displayText+=','
            elif 'apostrophe' in keys:
                displayText+='\''
            elif 'minus' in keys:
                displayText+='-'
            elif 'backspace' in keys:
                displayText=displayText[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif len(keys[0])>1:
                pass
            else:
                if modify:
                    displayText += keys[0].upper()
                    modify = False
                else:
                    displayText += keys[0]

        if displayText!=oldDisplayText or cursorCounter == 1:
            age.text=displayText+cursorVariable
            oldDisplayText=displayText
      End Routine:
        thisExp.addData("Age", age.text)
        thisExp.addData("typingTime", rt)
    TextComponent age
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent ageInstr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = What is your age:
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  Routine genderSurvey
    CodeComponent setup_gender
      Code Type = Auto->JS
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      Begin Routine:
        kb = keyboard.Keyboard()
        textStarted=0
        rt=0
        modify = False
        gender.text = ''
        displayText=''
        oldDisplayText=''
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        typedWords=[]
        thisWord=0
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable=='|':
                cursorVariable=' '
            else:
                cursorVariable='|'
            cursorCounter=0
        cursorCounter+=1

        keys = event.getKeys()
        if len(keys):
        #Start the clock on first key
            if textStarted == 0:
                textStarted = 1
            if 'return' in keys:
                continueRoutine = False
            if 'space' in keys:
                displayText+=' '
            elif 'period' in keys:
                displayText+='.'
            elif 'comma' in keys:
                displayText+=','
            elif 'apostrophe' in keys:
                displayText+='\''
            elif 'minus' in keys:
                displayText+='-'
            elif 'backspace' in keys:
                displayText=displayText[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif len(keys[0])>1:
                pass
            else:
                if modify:
                    displayText += keys[0].upper()
                    modify = False
                else:
                    displayText += keys[0]

        if displayText!=oldDisplayText or cursorCounter == 1:
            gender.text=displayText+cursorVariable
            oldDisplayText=displayText
      End Routine:
        thisExp.addData("Gender", gender.text)
        thisExp.addData("typingTime", rt)
    TextComponent gender
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent genderInstr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = What is your gender: male/female/other
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  Routine nativeLangSurvey
    CodeComponent setup_nativeLang
      Code Type = Auto->JS
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      Begin Routine:
        kb = keyboard.Keyboard()
        textStarted=0
        rt=0
        modify = False
        nativeLang.text = ''
        displayText=''
        oldDisplayText=''
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        typedWords=[]
        thisWord=0
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable=='|':
                cursorVariable=' '
            else:
                cursorVariable='|'
            cursorCounter=0
        cursorCounter+=1

        keys = event.getKeys()
        if len(keys):
        #Start the clock on first key
            if textStarted == 0:
                textStarted = 1
            if 'return' in keys:
                continueRoutine = False
            if 'space' in keys:
                displayText+=' '
            elif 'period' in keys:
                displayText+='.'
            elif 'comma' in keys:
                displayText+=','
            elif 'apostrophe' in keys:
                displayText+='\''
            elif 'minus' in keys:
                displayText+='-'
            elif 'backspace' in keys:
                displayText=displayText[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif len(keys[0])>1:
                pass
            else:
                if modify:
                    displayText += keys[0].upper()
                    modify = False
                else:
                    displayText += keys[0]

        if displayText!=oldDisplayText or cursorCounter == 1:
            nativeLang.text=displayText+cursorVariable
            oldDisplayText=displayText
      End Routine:
        thisExp.addData("Answer Native Lang", nativeLang.text)
        thisExp.addData("typingTime", rt)
    TextComponent nativeLang
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent nativeLangInstr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = What is/are your native language(s):
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  Routine otherLangSurvey
    TextComponent otherLang
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent setup_otherLang
      Code Type = Auto->JS
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      Begin Routine:
        kb = keyboard.Keyboard()
        textStarted=0
        rt=0
        modify = False
        otherLang.text = ''
        displayText=''
        oldDisplayText=''
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        typedWords=[]
        thisWord=0
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable=='|':
                cursorVariable=' '
            else:
                cursorVariable='|'
            cursorCounter=0
        cursorCounter+=1

        keys = event.getKeys()
        if len(keys):
        #Start the clock on first key
            if textStarted == 0:
                textStarted = 1
            if 'return' in keys:
                continueRoutine = False
            if 'space' in keys:
                displayText+=' '
            elif 'period' in keys:
                displayText+='.'
            elif 'comma' in keys:
                displayText+=','
            elif 'apostrophe' in keys:
                displayText+='\''
            elif 'minus' in keys:
                displayText+='-'
            elif 'backspace' in keys:
                displayText=displayText[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif len(keys[0])>1:
                pass
            else:
                if modify:
                    displayText += keys[0].upper()
                    modify = False
                else:
                    displayText += keys[0]

        if displayText!=oldDisplayText or cursorCounter == 1:
            otherLang.text=displayText+cursorVariable
            oldDisplayText=displayText
      End Routine:
        thisExp.addData("Answer Other Language", otherLang.text)
        thisExp.addData("typingTime", rt)
    TextComponent otherLangInstr
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Do you speak any other languages, and if so, what languages and for how long:
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  Routine surveyInstructions
    TextComponent surveyInstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = This final part contains four questions to collect some demographic information of the test group. Please answer the questions but feel free to leave any blank that you are uncomfortable answering. After typing your answer for a question, press enter to go to the next one. Or, just press enter to skip the question.
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    KeyboardComponent skipSurveyInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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Flow
  Routine instr
  LoopInitiator alltrain1 loopType="TrialHandler"
    conditionsFile = $trainFile
    loopType = sequential
    nReps = 1
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    Routine train1Instr
    LoopInitiator trial1phases loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = sequential
      nReps = 1
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      LoopInitiator train1Words loopType="TrialHandler"
        conditionsFile = $condFiles
        loopType = sequential
        nReps = 1
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        Routine train1
      LoopTerminator train1Words
      LoopInitiator break_loop loopType="TrialHandler"
        loopType = sequential
        nReps = 1
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        Routine train1QuestInstr
      LoopTerminator break_loop
      LoopInitiator train1Questions loopType="TrialHandler"
        conditionsFile = $testFiles
        loopType = sequential
        nReps = 1
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        Routine train1questions
        Routine train1feedback
      LoopTerminator train1Questions
    LoopTerminator trial1phases
  LoopTerminator alltrain1
  Routine test1wait
  Routine test1instr
  LoopInitiator test1Loop loopType="TrialHandler"
    conditionsFile = $test1File
    loopType = sequential
    nReps = 1
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    Routine test1
    Routine test1feedback
  LoopTerminator test1Loop
  Routine test2wait
  Routine test2instr
  LoopInitiator test2Loop loopType="TrialHandler"
    conditionsFile = $test2File
    loopType = sequential
    nReps = 1
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    Routine test2
  LoopTerminator test2Loop
  Routine test3wait
  LoopInitiator test3Loop loopType="TrialHandler"
    conditionsFile = $test3File
    loopType = sequential
    nReps = 1
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    Routine test3
  LoopTerminator test3Loop
  Routine postTestInstr
  LoopInitiator postTestLoop loopType="TrialHandler"
    conditionsFile = postTestConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audioA', 'postTest/82_tipiko1.wav'), ('audioX', 'postTest/82_tipiko1.wav'), ('audioB', 'postTest/82_tipiko3.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', 'postTest/83_pitita3.wav'), ('audioX', 'postTest/83_pitita3.wav'), ('audioB', 'postTest/83_pitita2.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', 'postTest/84_pitoka3.wav'), ('audioX', 'postTest/84_pitoka1.wav'), ('audioB', 'postTest/84_pitoka1.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', 'postTest/85_kipata2.wav'), ('audioX', 'postTest/85_kipata2.wav'), ('audioB', 'postTest/85_kipata3.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', 'postTest/86_totipa2.wav'), ('audioX', 'postTest/86_totipa1.wav'), ('audioB', 'postTest/86_totipa1.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', 'postTest/87_kopoko1.wav'), ('audioX', 'postTest/87_kopoko3.wav'), ('audioB', 'postTest/87_kopoko3.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', 'postTest/88_pokota2.wav'), ('audioX', 'postTest/88_pokota2.wav'), ('audioB', 'postTest/88_pokota1.wav'), ('currentPhase', 'postTest'), ('correctLabel', 'audioA')])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
    Routine posttest
  LoopTerminator postTestLoop
  Routine thankuser
