PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sonority
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating!

        Instructions will go here
    KeyboardComponent instrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trainquestions1
    SoundComponent stimulitest1
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent correct
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    KeyboardComponent train1TestAnswer
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6.0
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  Routine train1
    SoundComponent stimulitrain1
      sound [set every repeat] = $audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent imagetrain1
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine instr2
    TextComponent notice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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      text:
        Next part will automaticall start in 3 minutes.

        Press any button to start
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine train2
    SoundComponent stimulitrain2
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent imagetrain2
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine trainquestions2
    SoundComponent stimulitest2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent train2TestAnswer
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
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    ImageComponent correct2
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect2
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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  Routine test1
    SoundComponent test1Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent test1Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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    SoundComponent test1Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    ImageComponent test1Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    KeyboardComponent test1Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    ImageComponent test1Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent test1F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = F
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    TextComponent test1J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = J
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  Routine testTrainInstr
    TextComponent test1Instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
      text = Instructions For Test1 Go Here
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    KeyboardComponent skipTest1Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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    TextComponent oneWarningTest1
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 540
      stopVal [duration (s)] = 60
      text = Less than 1 minute left
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    TextComponent twoWarningTest1
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 480
      stopVal [duration (s)] = 60
      text = Less than 2 minutes left
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    TextComponent threeWarningTest1
      letterHeight = 0.1
      startVal [time (s)] = 420
      stopVal [duration (s)] = 60
      text = Less than 3 minutes left
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    TextComponent fourWarningTest1
      letterHeight = 0.1
      startVal [time (s)] = 360
      stopVal [duration (s)] = 60
      text = Less than four minutes left
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  Routine test2
    SoundComponent test2Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test1Audio2Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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    SoundComponent test2Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent test2Audio2Mute2
      image = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    KeyboardComponent test2Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    ImageComponent test2Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent test2F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = F
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    TextComponent test2J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = J
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  Routine testNovel2Instr
    TextComponent test3Instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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      text:
        Instructions For Test3 Go Here
    KeyboardComponent skipTest3Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine testNovel1Instr
    TextComponent test2Instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
      text = Instructions For Test2 Go Here
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    KeyboardComponent skipTest2Instr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600
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  Routine test3
    SoundComponent test3Audio1
      sound [set every repeat] = $firstAudio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio1Sound
      image [set every repeat] = sound.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio1Mute
      image [set every repeat] = mute.png
      pos = (-0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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    SoundComponent test3Audio2
      sound [set every repeat] = $secondAudio
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    ImageComponent test3Audio2Mute1
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio2Sound
      image [set every repeat] = sound.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent test3Audio2Mute2
      image [set every repeat] = mute.png
      pos = (0.3, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    KeyboardComponent test3Response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    ImageComponent test3Image
      image [set every repeat] = $imageLoc
      pos = (0, 0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent test3F
      letterHeight = 0.2
      pos = (-0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = F
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    TextComponent test3J
      letterHeight = 0.2
      pos = (0.3, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = J
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  Routine postTestInstr
    TextComponent postTestText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You have reached the final section of the experiment.
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  Routine posttest
    KeyboardComponent postTestResponse
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 7
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    SoundComponent postTestAudio1
      sound [set every repeat] = $audioA
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent fSound
      image = sound.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent fMute
      image = mute.png
      pos = (-0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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    SoundComponent postTestAudio2
      sound [set every repeat] = $audioB
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent xMute1
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent xSound
      image = Sound.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    ImageComponent xMute2
      image = mute.png
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    SoundComponent postTestAudio3
      hamming = False
      sound [set every repeat] = $audioC
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent jMute1
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent jSound
      image = sound.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent jMute2
      image = mute.png
      pos = (0.5, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 7
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    TextComponent textInstructionsPostTest
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Does the middle audio (X) match in stress with F or J? (Press F or J)
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    TextComponent fText
      letterHeight = 0.3
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = F
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    TextComponent xText
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = X
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    TextComponent jText
      letterHeight = 0.3
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = J
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  Routine thankuser
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press any button to end this experiment
    KeyboardComponent quit
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator train1blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train1LoopCondition.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('condFiles', 'autoConditions/train1Block1.xlsx'), ('testFiles', 'autoConditions/train1Block1Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block2.xlsx'), ('testFiles', 'autoConditions/train1Block2Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block3.xlsx'), ('testFiles', 'autoConditions/train1Block3Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block4.xlsx'), ('testFiles', 'autoConditions/train1Block4Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block5.xlsx'), ('testFiles', 'autoConditions/train1Block5Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block6.xlsx'), ('testFiles', 'autoConditions/train1Block6Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block7.xlsx'), ('testFiles', 'autoConditions/train1Block7Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block8.xlsx'), ('testFiles', 'autoConditions/train1Block8Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block9.xlsx'), ('testFiles', 'autoConditions/train1Block9Test.xlsx')])]
    LoopInitiator blockwords1 loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train1
    LoopTerminator blockwords1
    LoopInitiator blocktest1 loopType="TrialHandler"
      conditionsFile = $testFiles
      loopType = sequential
      nReps = 1
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      Routine trainquestions1
    LoopTerminator blocktest1
  LoopTerminator train1blocks
  Routine instr2
  LoopInitiator train2blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train2LoopCondition.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('condFiles', 'autoConditions/train2Block1.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train2Block2.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train2Block3.xlsx')])]
    LoopInitiator blockloop2 loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train2
    LoopTerminator blockloop2
    LoopInitiator blocktest2 loopType="TrialHandler"
      conditionsFile = $testFiles
      loopType = sequential
      nReps = 1
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      Routine trainquestions2
    LoopTerminator blocktest2
  LoopTerminator train2blocks
  Routine testTrainInstr
  LoopInitiator test1Loop loopType="TrialHandler"
    conditionsFile = autoConditions\test1Conditions.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('firstAudio', '17_kotako3.wav'), ('secondAudio', '17_kotako2.wav'), ('imageLoc', 'pngimages/17_cracker.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '25_tapapi3.wav'), ('secondAudio', '25_tapapi1.wav'), ('imageLoc', 'pngimages/25_apple.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '14_pokoto1.wav'), ('secondAudio', '14_pokoto2.wav'), ('imageLoc', 'pngimages/14_coffee.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '27_pakapa1.wav'), ('secondAudio', '27_pakapa2.wav'), ('imageLoc', 'pngimages/27_kiwi.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '01_kitipi1.wav'), ('secondAudio', '01_kitipi2.wav'), ('imageLoc', 'pngimages/01_gift.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '05_titopo2.wav'), ('secondAudio', '05_titopo3.wav'), ('imageLoc', 'pngimages/05_megaphone.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '12_pokika1.wav'), ('secondAudio', '12_pokika3.wav'), ('imageLoc', 'pngimages/12_pie.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '16_kotapi2.wav'), ('secondAudio', '16_kotapi3.wav'), ('imageLoc', 'pngimages/16_icecream.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '03_kikita3.wav'), ('secondAudio', '03_kikita1.wav'), ('imageLoc', 'pngimages/03_box.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '21_papika3.wav'), ('secondAudio', '21_papika1.wav'), ('imageLoc', 'pngimages/21_cheese.png'), ('whichAudio', 2)])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
    Routine test1
  LoopTerminator test1Loop
  Routine testNovel1Instr
  LoopInitiator test2Loop loopType="TrialHandler"
    conditionsFile = autoConditions\test2Conditions.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('firstAudio', '49_tatopi1.wav'), ('secondAudio', '49_tatopi3.wav'), ('imageLoc', 'pngimages/49_calculator.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '71_kotato1.wav'), ('secondAudio', '71_kotato2.wav'), ('imageLoc', 'pngimages/71_eye.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '80_tatato1.wav'), ('secondAudio', '80_tatato3.wav'), ('imageLoc', 'pngimages/80_dog.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '36_pipapa2.wav'), ('secondAudio', '36_pipapa1.wav'), ('imageLoc', 'pngimages/36_microwave.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '57_tipipa2.wav'), ('secondAudio', '57_tipipa3.wav'), ('imageLoc', 'pngimages/57_flashlight.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '51_tapopa2.wav'), ('secondAudio', '51_tapopa1.wav'), ('imageLoc', 'pngimages/51_pencil.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '76_patoti1.wav'), ('secondAudio', '76_patoti3.wav'), ('imageLoc', 'pngimages/76_rabbit.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', '58_kipoki3.wav'), ('secondAudio', '58_kipoki2.wav'), ('imageLoc', 'pngimages/58_nail.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '32_kipoto3.wav'), ('secondAudio', '32_kipoto2.wav'), ('imageLoc', 'pngimages/32_greenpepper.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', '81_kakapa3.wav'), ('secondAudio', '81_kakapa1.wav'), ('imageLoc', 'pngimages/81_cat.png'), ('whichAudio', 2)])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
    Routine test2
  LoopTerminator test2Loop
  Routine testNovel2Instr
  LoopInitiator test3Loop loopType="TrialHandler"
    conditionsFile = autoConditions\test3Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('firstAudio', 'novelaudio/72_topata3.wav'), ('secondAudio', 'novelaudio/72_topata2.wav'), ('imageLoc', 'pngimages/72_nose.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/40_kototi1.wav'), ('secondAudio', 'novelaudio/40_kototi2.wav'), ('imageLoc', 'pngimages/40_spoon.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/77_takopo1.wav'), ('secondAudio', 'novelaudio/77_takopo2.wav'), ('imageLoc', 'pngimages/77_bear.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/73_takiti3.wav'), ('secondAudio', 'novelaudio/73_takiti1.wav'), ('imageLoc', 'pngimages/73_car.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/44_pokato1.wav'), ('secondAudio', 'novelaudio/44_pokato2.wav'), ('imageLoc', 'pngimages/44_envelope.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/81_kakapa2.wav'), ('secondAudio', 'novelaudio/81_kakapa1.wav'), ('imageLoc', 'pngimages/81_cat.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/36_pipapa2.wav'), ('secondAudio', 'novelaudio/36_pipapa3.wav'), ('imageLoc', 'pngimages/36_microwave.png'), ('whichAudio', 1)]),
      OrderedDict([('firstAudio', 'novelaudio/28_pipiki3.wav'), ('secondAudio', 'novelaudio/28_pipiki1.wav'), ('imageLoc', 'pngimages/28_grape.png'), ('whichAudio', 2)]),
      OrderedDict([('firstAudio', 'novelaudio/57_tipipa3.wav'), ('secondAudio', 'novelaudio/57_tipipa1.wav'), ('imageLoc', 'pngimages/57_flashlight.png'), ('whichAudio', 1)])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
    Routine test3
  LoopTerminator test3Loop
  Routine postTestInstr
  LoopInitiator postTestLoop loopType="TrialHandler"
    conditionsFile = postTestConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audioA', '82_word1.wav'), ('audioB', '82_word3.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '83_word3.wav'), ('audioB', '83_word2.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '84_word3.wav'), ('audioB', '84_word1.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '85_word2.wav'), ('audioB', '85_word3.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '86_word2.wav'), ('audioB', '85_word1.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '87_word1.wav'), ('audioB', '87_word3.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '88_word2.wav'), ('audioB', '88_word1.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '89_word3.wav'), ('audioB', '89_word2.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '90_word2.wav'), ('audioB', '90_word3.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '91_word1.wav'), ('audioB', '91_word2.wav'), ('correctLabel', 'audioA')]),
      OrderedDict([('audioA', '92_word1.wav'), ('audioB', '92_word2.wav'), ('correctLabel', 'audioB')]),
      OrderedDict([('audioA', '93_word3.wav'), ('audioB', '93_word1.wav'), ('correctLabel', 'audioA')])]
    Routine posttest
  LoopTerminator postTestLoop
  Routine thankuser
